PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  color = grey
  expName = Big5
  logging level = debug
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Routines
  Routine trial
    TextComponent welcome
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Survey
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent instructions
      font = Times New Roman
      letterHeight = 0.055
      startVal [time (s)] = 0.0
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      text:
        Spatial Anxiety Scale

        On the next page, you will be presented a number of scenarios. Please rate your anxiety on the 5 point scale based off the scenario given. After selecting your rating by clicking on the scale, click once on the number below the scale to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine SpatialAnxietyScale
    TextComponent scenario1
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Scenario
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    TextComponent notAtAll
      font = Times New Roman
      letterHeight = 0.040
      pos = (-0.40, -0.10)
      startVal [time (s)] = 0.0
      text = Not at All
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    TextComponent veryMuch
      font = Times New Roman
      letterHeight = 0.040
      pos = (0.40, -0.10)
      startVal [time (s)] = 0.0
      text = Very much
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('lastRating', ((rating.markerPlacedAt*0.20)))
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.75
      startVal [time (s)] = 0.0
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  Routine expectedBenefits
  Routine Big5Title
    TextComponent IntroScreen
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text = Big 5 Test
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator1
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine SASEnd
    TextComponent responseIndicator3
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent SASendText
      font = Times New Roman
      letterHeight = 0.080
      startVal [time (s)] = 0.0
      text = You have finished this assessment.
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  Routine RiskBehaviorStart
    TextComponent RiskBehaviorScaleStartText
      font = Times New Roman
      letterHeight = 0.080
      startVal [time (s)] = 0.0
      text = You will now begin the Risk Behavior Scale assessment.
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    TextComponent responseIndicator4
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine RBSInstr
    TextComponent riskBehaviorInstrText
      font = Times New Roman
      letterHeight = 0.060
      startVal [time (s)] = 0.0
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      text:
        Risk Behavior Scale

        For each of the statements, please indicate the likelihood of engaging in each activity. Provide a rating from 1 to 5, using the scale. After selecting your rating by clicking on the scale, click once on the number below the scale to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator5
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine RBS
    TextComponent activity
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $C
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    TextComponent extremelyUnlikely
      font = Times New Roman
      letterHeight = 0.035
      pos = (-0.50, -0.1)
      startVal [time (s)] = 0.0
      text = Very unlikely
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    TextComponent ExtremelyLikely
      font = Times New Roman
      letterHeight = 0.035
      pos = (0.50, -0.1)
      startVal [time (s)] = 0.0
      text = Very likely
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    RatingScaleComponent rating2
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('Rating', rating2.markerPlacedAt)
    TextComponent unlikely
      font = Times New Roman
      letterHeight = 0.035
      pos = (-0.25, -0.1)
      startVal [time (s)] = 0.0
      text = Unlikely
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    TextComponent neutral
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Not sure
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    TextComponent Likely
      font = Times New Roman
      letterHeight = 0.035
      pos = (0.25, -0.1)
      startVal [time (s)] = 0.0
      text = Likely
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  Routine RiskPerceptionStart
    TextComponent riskPerceptionInstructions
      font = Times New Roman
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = People often see some risk in situations that contain uncertainty about what the outcome or consequences will be and for which there is the possibility of ‘bad’ consequences. However, riskiness is a very personal and intuitive notion, and we are interested in your gut level assessment of how risky each situation is. 
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator6
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine RP
    TextComponent riskPerceptionActivity2
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $C
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    RatingScaleComponent rating3
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.75
      startVal [time (s)] = 0.0
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    TextComponent notAtAllRisky
      font = Times New Roman
      letterHeight = 0.035
      pos = (-0.45, -0.1)
      startVal [time (s)] = 0.0
      text = Not at all risky
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    TextComponent ModeratelyRisky
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Moderately risky
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    TextComponent ExtremelyRisky
      font = Times New Roman
      letterHeight = 0.035
      pos = (0.45, -0.1)
      startVal [time (s)] = 0.0
      text = Extremely risky
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('lastRating', rating3.markerPlacedAt*0.20)
  Routine RPInstr
    TextComponent riskPerceptionInstrText
      font = Times New Roman
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = For each of the following statements, please indicate how risky you perceive each situation. Provide a rating from 1 to 5 using the scale provided. After selecting your rating by clicking on the scale, click once on the number below the scale to continue.
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator7
      font = Times New Roman
      letterHeight = 0.040
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine EB
    TextComponent riskBenefitsScale
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $C
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    TextComponent noBenefits
      font = Times New Roman
      letterHeight = 0.035
      pos = (-0.45, -0.1)
      startVal [time (s)] = 0.0
      text = No benefits at all
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    RatingScaleComponent rating4
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.75
      startVal [time (s)] = 0.0
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    TextComponent greatBenefits
      font = Times New Roman
      letterHeight = 0.035
      pos = (0.45, -0.1)
      startVal [time (s)] = 0.0
      text = Great benefits
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    TextComponent moderateBenefits
      font = Times New Roman
      letterHeight = 0.035
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Moderate benefits
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('lastRating', rating4.markerPlacedAt)
  Routine ExpectedBenefitsInstr
    TextComponent expBenefitsInstrText
      font = Times New Roman
      letterHeight = 0.055
      startVal [time (s)] = 0.0
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      text:
        Expected Benefits Scale

        For each of the following statements, please indicate the benefits you would obtain from each situation. Provide a rating from 1 to 5 using the scale. After selecting your rating by clicking on the scale, click once on the number below the scale to continue.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator8
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine finishedEB
    TextComponent end2
      font = Times New Roman
      letterHeight = 0.060
      startVal [time (s)] = 0.0
      text = You have finished this assessment.
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator9
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue. 
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  Routine StartBig5
    TextComponent Big5StartText
      font = Times New Roman
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = You will now begin the Big 5 assessment.
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator10
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine B5Instr
    TextComponent Big5InstrText
      font = Times New Roman
      letterHeight = 0.060
      startVal [time (s)] = 0.0
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      text:
        The Big Five

        The following slides will display a number of characteristics that may or may not apply to you.

        For example, do you agree that you are someone who likes to spend time with others?
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator11
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine B5Instr2
    TextComponent Big5Instr2Text
      font = Times New Roman
      letterHeight = 0.070
      startVal [time (s)] = 0.0
      text = Please click on a number on the scale to indicate the extent to which you agree or disagree with the statement. After clicking on the scale, press again on the number below the scale to continue.
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator12
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine B5
    RatingScaleComponent rating5
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.75
      startVal [time (s)] = 0.0
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    TextComponent characText
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Charac
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    TextComponent Someone
      font = Times New Roman
      letterHeight = 0.060
      pos = (-0.40, 0.35)
      startVal [time (s)] = 0.0
      text = I am someone who…
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    TextComponent disagreeStrongly
      font = Times New Roman
      letterHeight = 0.030
      pos = (-0.40, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Disagree
        Strongly
    TextComponent disagreeALittle
      font = Times New Roman
      letterHeight = 0.030
      pos = (-0.20, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Disagree
        a little
    TextComponent Neutral
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Neutral;
        no opinion
    TextComponent AgreeALittle
      font = Times New Roman
      letterHeight = 0.030
      pos = (0.20, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Agree
        a little
    TextComponent AgreeStrongly
      font = Times New Roman
      letterHeight = 0.030
      pos = (0.40, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Agree
        strongly
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('lastRating', rating5.markerPlacedAt)
  Routine End
    TextComponent End3
      font = Times New Roman
      letterHeight = 0.080
      startVal [time (s)] = 0.0
      text = You have now completed the experiment.
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Big5Title
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = spatialAnxietyScale1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Scenario', 'Leaving a store that you have been to for the first time and deciding which way to turn to get to a destination.')]),
      OrderedDict([('Scenario', 'Finding your way out of a complex arrangement of offices that you have visited for the first time.')]),
      OrderedDict([('Scenario', 'Pointing in the direction of a place outside that someone wants to get to and has asked you for directions, when you are in a windowless room.')]),
      OrderedDict([('Scenario', 'Locating your car in a very large parking lot or parking garage.')]),
      OrderedDict([('Scenario', 'Trying a new route that you think will be a shortcut without the benefit of a map.')]),
      OrderedDict([('Scenario', 'Finding your way back to a familiar area after realizing you have made a wrong turn and become lost while driving.')]),
      OrderedDict([('Scenario', 'Finding your way around in an unfamiliar mall.')]),
      OrderedDict([('Scenario', 'Finding your way to an appointment in an area of a city or town with which you are not familiar. ')])]
    Routine SpatialAnxietyScale
  LoopTerminator trials
  Routine SASEnd
  Routine RiskBehaviorStart
  Routine RBSInstr
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = activities.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('C', 'Admitting that your tastes are different from those of your friends.')]),
      OrderedDict([('C', 'Going camping in the wilderness, beyond the civilization of a campground.')]),
      OrderedDict([('C', "Betting a day's income at the horse races.")]),
      OrderedDict([('C', 'Buying an illegal drug for your own use. ')]),
      OrderedDict([('C', 'Cheating on an exam. ')]),
      OrderedDict([('C', 'Chasing a tornado or hurricane by car to take dramatic photos. ')]),
      OrderedDict([('C', 'Investing 10% of your annual income in a moderate growth mutual fund. ')]),
      OrderedDict([('C', 'Consuming five or more servings of alcohol in a single evening. ')]),
      OrderedDict([('C', 'Cheating by a significant amount on your income tax return. ')]),
      OrderedDict([('C', 'Disagreeing with your father on a major issue. ')]),
      OrderedDict([('C', "Betting a day's income at a high stake poker game. ")]),
      OrderedDict([('C', 'Having an affair with a married man or woman. ')]),
      OrderedDict([('C', "Forging somebody's signature. ")]),
      OrderedDict([('C', "Passing off somebody else's work as your own. ")]),
      OrderedDict([('C', 'Going on a vacation in a third-world country without prearranged travel and hotel accommodations. ')]),
      OrderedDict([('C', 'Arguing with a friend about an issue on which he or she has a very different opinion. ')]),
      OrderedDict([('C', 'Going down a ski run that is beyond your ability or closed.')]),
      OrderedDict([('C', 'Investing 5% of your annual income in a very speculative stock. ')])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
    Routine RBS
  LoopTerminator trials_2
  Routine RiskPerceptionStart
  Routine RPInstr
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = activities.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('C', 'Admitting that your tastes are different from those of your friends.')]),
      OrderedDict([('C', 'Going camping in the wilderness, beyond the civilization of a campground.')]),
      OrderedDict([('C', "Betting a day's income at the horse races.")]),
      OrderedDict([('C', 'Buying an illegal drug for your own use. ')]),
      OrderedDict([('C', 'Cheating on an exam. ')]),
      OrderedDict([('C', 'Chasing a tornado or hurricane by car to take dramatic photos. ')]),
      OrderedDict([('C', 'Investing 10% of your annual income in a moderate growth mutual fund. ')]),
      OrderedDict([('C', 'Consuming five or more servings of alcohol in a single evening. ')]),
      OrderedDict([('C', 'Cheating by a significant amount on your income tax return. ')]),
      OrderedDict([('C', 'Disagreeing with your father on a major issue. ')]),
      OrderedDict([('C', "Betting a day's income at a high stake poker game. ")]),
      OrderedDict([('C', 'Having an affair with a married man or woman. ')]),
      OrderedDict([('C', "Forging somebody's signature. ")]),
      OrderedDict([('C', "Passing off somebody else's work as your own. ")]),
      OrderedDict([('C', 'Going on a vacation in a third-world country without prearranged travel and hotel accommodations. ')]),
      OrderedDict([('C', 'Arguing with a friend about an issue on which he or she has a very different opinion. ')]),
      OrderedDict([('C', 'Going down a ski run that is beyond your ability or closed.')]),
      OrderedDict([('C', 'Investing 5% of your annual income in a very speculative stock. ')])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
    Routine RP
  LoopTerminator trials_3
  Routine ExpectedBenefitsInstr
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = activities.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine EB
  LoopTerminator trials_4
  Routine finishedEB
  Routine StartBig5
  Routine B5Instr
  Routine B5Instr2
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = charac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Charac', 'Tends to be quiet.')]),
      OrderedDict([('Charac', 'Is compassionate, has a soft heart.')]),
      OrderedDict([('Charac', 'Tends to be disorganized.')]),
      OrderedDict([('Charac', 'Worries a lot.')]),
      OrderedDict([('Charac', 'Is fascinated by art, music, or literature.')]),
      OrderedDict([('Charac', 'Is dominant, acts as a leader.')]),
      OrderedDict([('Charac', 'Is sometimes rude to others.')]),
      OrderedDict([('Charac', 'Has difficulty getting started on tasks.')]),
      OrderedDict([('Charac', 'Tends to feel depressed, blue.')]),
      OrderedDict([('Charac', 'Has little interest in abstract ideas.')]),
      OrderedDict([('Charac', 'Is full of energy. ')]),
      OrderedDict([('Charac', 'Assumes the best about people.')]),
      OrderedDict([('Charac', 'Is reliable, can always be counted on.')]),
      OrderedDict([('Charac', 'Is emotionally stable, not easily upset.')]),
      OrderedDict([('Charac', 'Is original, comes up with new ideas.')]),
      OrderedDict([('Charac', 'Is outgoing, sociable.')]),
      OrderedDict([('Charac', 'Can be cold and uncaring.')]),
      OrderedDict([('Charac', 'Keep things neat and tidy.')]),
      OrderedDict([('Charac', 'Is relaxed, handles stress well. ')]),
      OrderedDict([('Charac', 'Has few artistic interests.')]),
      OrderedDict([('Charac', 'Prefers to have others take charge.')]),
      OrderedDict([('Charac', 'Is respectful, treats others with respect.')]),
      OrderedDict([('Charac', 'Is persistent, works until the task is finished.')]),
      OrderedDict([('Charac', 'Feels secure, comfortable with self.')])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
    Routine B5
  LoopTerminator trials_5
  Routine End
