PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = black
  expName = Big5
  logging level = debug
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Routines
  Routine trial
    TextComponent welcome
      color = black
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Survey
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Big_5
    TextComponent IntroScreen
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Big 5 Test
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SpatialAnxietyScale
    TextComponent scenario1
      font = Times New Roman
      letterHeight = 0.060
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Scenario
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    TextComponent notAtAll
      font = Times New Roman
      letterHeight = 0.030
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text = Not at All
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    TextComponent veryMuch
      font = Times New Roman
      letterHeight = 0.030
      pos = (0.4, -0.2)
      startVal [time (s)] = 0.0
      text = Very much
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('lastRating', (rating.markerPlacedAt*0.20)-0.20)
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent instructions
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Spatial Anxiety Scale

        On the next page, you will be presented a number of scenarios. Please rate your anxiety on the 5 point scale based off the scenario given.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Big_5
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../Library/CELSYS/spatialAnxietyScale1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Scenario', 'Leaving a store that you have been to for the first time and deciding which way to turn to get to a destination.')]),
      OrderedDict([('Scenario', 'Finding your way out of a complex arrangement of offices that you have visited for the first time.')]),
      OrderedDict([('Scenario', 'Pointing in the direction of a place outside that someone wants to get to and has asked you for directions, when you are in a windowless room.')]),
      OrderedDict([('Scenario', 'Locating your car in a very large parking lot or parking garage.')]),
      OrderedDict([('Scenario', 'Trying a new route that you think will be a shortcut without the benefit of a map.')]),
      OrderedDict([('Scenario', 'Finding your way back to a familiar area after realizing you have made a wrong turn and become lost while driving.')]),
      OrderedDict([('Scenario', 'Finding your way around in an unfamiliar mall.')]),
      OrderedDict([('Scenario', 'Finding your way to an appointment in an area of a city or town with which you are not familiar. ')])]
    Routine SpatialAnxietyScale
  LoopTerminator trials
